---
API: 3
OpenSesame: 4.0.13
Platform: posix
---
set width 1920
set title free_viewing_experiment
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set psychopy_screen 0
set mouse_backend psycho
set keyboard_backend psycho
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "/home/stimulus/projects/2024FreeViewingMSCOCO/experiment"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#808080"

define sketchpad PressSpacebar
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=True text="Press spacebar to start trial<br />" x=-6 y=8 z_index=0

define sequence block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_sequence True
	run stimulus_sequence True
	run break_sequence "=(count_block_sequence>0) and (count_block_sequence!=total_trials) and ((count_block_sequence%block_size) == 0)"

define sequence break_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run send_trigger_breakstart True
	run break_sketchpad True
	run send_trigger_breakend True

define sketchpad break_sketchpad
	set duration keypress
	set description ""
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=True text="Short break<br /><br />You have completed [current_block_no] out of [total_blocks] blocks.<br /><br />Press any key when you are ready to continue." x=0 y=0 z_index=0

define sketchpad end_of_exp
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=True text="End of experiment. <br /><br />Thank you for participating!<br /><br />Press any key to exit." x=0 y=0 z_index=0

define sketchpad end_of_practice
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=True text="End of the practice session - now we will begin with the actual experiment. <br /><br /><br />Press any key to continue" x=0 y=0 z_index=0

define form_text_display endofinstructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	set form_text "Thank you for participating."
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define form_text_display endofpractice
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	set form_text "End of Practice"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run setup True
	run instructions True
	run new_pygaze_start_recording True
	run practiceloop True
	run end_of_practice True
	run send_trigger_end_practice True
	run main_loop True
	run end_of_exp True
	run new_pygaze_stop_recording True

define sketchpad fixation1_sketchpad
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=white show_if=True style=default x=0 y=0 z_index=0

define sketchpad fixation_jittered
	set duration 400
	set description "Displays stimuli"
	draw fixdot color=white show_if=True style=default x=0 y=0 z_index=0

define loop fixation_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if fixated
	setcycle 0 empty_column ""
	run ""

define sequence fixation_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run PressSpacebar True
	run keyboard_response True
	run manual_pause_start "[response_keyboard_response] = 'p'"
	run send_trigger_manual_pause_start "[response_keyboard_response] = 'p'"
	run manual_pause_kbd "[response_keyboard_response] = 'p'"
	run manual_calibrate "[response_keyboard_response] = 'p' and [response_manual_pause_kbd] = 'c'"
	run manual_pause_end "[response_keyboard_response] = 'p'"
	run manual_pause_end_kbd "[response_keyboard_response] = 'p'"
	run send_trigger_manual_pause_end "[response_keyboard_response] = 'p'"
	run fixation1_sketchpad True
	run wait_for_centre_gaze True

define inline_script general_setup
	set description "Executes Python code"
	___run__
	import csv 
	
	n_practicetrials = 5
	block_size = 10
	exp_imgdetails_file_name = "projects/2024FreeViewingMSCOCO/assets/images/experiment_images_info.csv"
	fixated = False
	
	
	exp.items['block_sequence'].count = -1 * n_practicetrials # negative trial numbers for the practice block
	
	with open(exp_imgdetails_file_name) as file:
	    total_trials = len(list(csv.reader(file))) - 1 # first row is column headers
	print("total trials ", total_trials) 
	total_blocks = math.ceil(total_trials / block_size) # 5
	print("total blocks ", total_blocks)
	current_block_no = 1 # block number 1 for the first block (assume no increment happens in practice loop)
	
	eyetracker.send_command("calibration_area_proportion = 0.60 0.75")
	eyetracker.send_command("screen_write_prescale = 8")
	eyetracker.send_command("validation_area_proportion = 0.60 0.75")
	eyetracker.send_command("calibration_type = HV13") # automatically works to set validation_type as well.
	
	# new_pygaze_init runs a calibration by default at init, but that will not have the custom parameters. 
	# Thus we have unchecked 'calibrate' from the pygaze_init and are triggering the first calibration here through code.
	eyetracker.stop_recording()
	eyetracker.calibrate()
	eyetracker.start_recording()
	__end__
	set _prepare ""

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sequence instructions
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run welcome True
	run instructions_sketchpad True
	run start_practice_trials_info True

define sketchpad instructions_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color=white font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=True text="You will be presented photographies to freely look at. There is no other task.<br /><br /><br />1. You can start a trial by pressing SPACE. <br /><br />2. At each trial, a dot will appear on the screen. Please look at the dot until the next image appears.<br /><br />3. The image will appear for you to freely explore<br /><br /><br />The experiment consists of 8 blocks with 50 trials each. <br /><br />After each block, you can take a larger break and e.g. stretch a bit, or close your eyes for a longer time. <br /><br /><b> Do not stand up without asking the experimenter for permission.</b>" x=-352 y=-160 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="<i>Press any key to continue. </i>" x=0 y=288 z_index=0

define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "SPACE;p"

define logger log_all_variables
	set description "Logs experimental data"
	set auto_log yes
	exclude datetime

define loop main_loop
	set source_file "experiment_images_info.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 image "1_o.jpg"
	setcycle 1 image "2_o.jpg"
	setcycle 2 image "3_o.jpg"
	setcycle 3 image "4_o.jpg"
	setcycle 4 image "5_o.jpg"
	setcycle 5 image "6_o.jpg"
	setcycle 6 image "7_o.jpg"
	setcycle 7 image "8_o.jpg"
	setcycle 8 image "9_o.jpg"
	setcycle 9 image "10_o.jpg"
	run block_sequence

define inline_script manual_calibrate
	set description "Executes Python code"
	___run__
	eyetracker.stop_recording()
	send_triggers(3,'Recalibration start')
	eyetracker.calibrate()
	eyetracker.start_recording()
	send_triggers(4,'Recalibration end')
	__end__
	set _prepare ""

define sketchpad manual_pause_end
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=True text="Thank you for waiting. We will now resume the experiment.<br /><br />Press SPACE to continue" x=0 y=0 z_index=0

define keyboard_response manual_pause_end_kbd
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses SPACE

define keyboard_response manual_pause_kbd
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "c;r"

define sketchpad manual_pause_start
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=True text="Manual pause<br /><br />The researcher has paused the experiment. Please wait for further instructions." x=0 y=0 z_index=0

define form_text_display new_1_form_text_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	set form_text "Your message"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define sketchpad new_1_sketchpad
	set duration keypress
	set description "Displays stimuli"

define sequence new_2_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define advanced_delay new_advanced_delay
	set jitter_mode Uniform
	set jitter 300
	set duration 500
	set description "A random delay sampled from either a normal or uniform distribution"

define feedback new_feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"

define form_text_display new_form_text_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	set form_text "Your message"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define loop new_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trial_sequence

define pygaze_init new_pygaze_init
	set tracker_type EyeLink
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initializes and calibrates the eye tracker"
	set calibrate no
	set calbeep no
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile automatic

define pygaze_start_recording new_pygaze_start_recording
	set status_msg start_recording
	set description "Puts the eye tracker into recording mode"

define pygaze_stop_recording new_pygaze_stop_recording
	set status_msg stop_recording
	set description ""

define reset_feedback new_reset_feedback
	set description "A very simple plug-in to reset feedback variables"

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define form_text_display practiceinstructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	set form_text ""
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define loop practiceloop
	set source_file "practise_images_info.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 image "1_p.jpg"
	setcycle 1 image "2_p.jpg"
	setcycle 2 image "3_p.jpg"
	run block_sequence

define form_text_display priliminaryinstructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	set form_text ""
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define inline_script send_trigger_breakend
	set description "Executes Python code"
	___run__
	send_triggers(6,'Break end')
	eyetracker.stop_recording()
	send_triggers(3,'Recalibration start')
	eyetracker.calibrate()
	eyetracker.start_recording()
	send_triggers(4,'Recalibration end')
	__end__
	set _prepare ""

define inline_script send_trigger_breakstart
	set description "Executes Python code"
	___run__
	send_triggers(5,'Break start')
	current_block_no = math.floor((count_block_sequence) / block_size) + 1 # current_block_no + 1
	__end__
	set _prepare ""

define inline_script send_trigger_end_practice
	set description "Executes Python code"
	___run__
	send_triggers(7,'End of practice trials')
	exp.items['block_sequence'].count = 1 # start trial-number from 1
	__end__
	set _prepare ""

define inline_script send_trigger_end_stimulus
	set description "Executes Python code"
	___run__
	send_triggers(8,'Stimulus end')
	var.fixated = False
	__end__
	set _prepare ""

define inline_script send_trigger_manual_pause_end
	set description "Executes Python code"
	set _run "send_triggers(10,'Manual pause end')"
	set _prepare ""

define inline_script send_trigger_manual_pause_start
	set description "Executes Python code"
	set _run "send_triggers(9,'Manual pause start')"
	set _prepare ""

define inline_script send_trigger_start_stimulus
	set description "Executes Python code"
	set _run "send_triggers(2,'Stimulus image shown')"
	set _prepare ""

define sequence setup
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_pygaze_init True
	run trigger_setup True
	run general_setup True

define sketchpad start_practice_trials_info
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=True text="Let us begin with some practice trials.<br /><br />If you have any questions, feel free to ask during this practice session. " x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="<i> Press any key to continue </i>" x=0 y=256 z_index=0

define sketchpad stimuli
	set duration 5000
	set description "Displays stimuli"
	draw image center=1 file="projects/2024FreeViewingMSCOCO/assets/images/[file_name]" scale=1 show_if=True x=0 y=0 z_index=0

define sequence stimulus_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_advanced_delay True
	run send_trigger_start_stimulus True
	run stimuli True
	run send_trigger_end_stimulus True
	run log_all_variables True

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define inline_script trigger_setup
	set description "Executes Python code"
	___run__
	from pylsl import StreamInfo, StreamOutlet
	import math
	
	# Setup your marker streams - EEG
	# Setup LSL
	# Create stream info
	info = StreamInfo(name="LSL_Markers123", type="Markers", channel_count=1,channel_format="string", source_id="LSL_Markers_001")
	# Make an outlet
	outlet = StreamOutlet(info)
	#eyetracker.send_command("write_ioport 0xA 0x0")
	#eyetracker.send_command("write_ioport 0x7 0x0")
	
	def send_triggers(trig_no,trig_name):
	    """Send value as hardware trigger and LSL marker."""
	    current_trial_no = count_block_sequence # trialno.
	    current_block_no = math.floor((current_trial_no-1) / block_size) + 1
	    
	    # send to ET 
	    eyetracker.log(f"trigger={trig_no:02d} {trig_name} | block={current_block_no} | trial={current_trial_no} | image={var.file_name}")
	    
	    # send to LSL
	    outlet.push_sample([f"trigger={trig_no:02d} {trig_name} | block={current_block_no} | trial={current_trial_no} | image={var.file_name}"])
	    
	    # show to researcher in console
	    print(f"trigger={trig_no:02d} {trig_name} | block={current_block_no} | trial={current_trial_no} | image={var.file_name}")
	    
	    # Send to EEG via ET - not used as of now
	    # 0x8 for installed parallelport card
	    # 0x7 for USB2TTL
	    # 0x236?? for mainboard parallelport 
	    #cmd = "write_ioport 0x7 0x"+f"{trig_no:02x}".upper()
	    #print(cmd)
	    #eyetracker.send_command(cmd)
	    #clock.sleep(2)
	    #eyetracker.send_command("write_ioport 0x7 0x0")
	__end__
	set _prepare ""

define inline_script wait_for_centre_gaze
	set description "Executes Python code"
	___run__
	send_triggers(1,'Fixation dot shown')
	
	# compute the screen centre coordinates
	centre = (exp.resolution()[0]/2, exp.resolution()[1]/2)
	
	wait_for_gaze(centre)
	__end__
	___prepare__
	import math
	
	tolerance = 44
	gaze_timeout = 5000
	duration = 650
	
	def wait_for_gaze(point): # every 'diff' milliseconds, check if the user is looking at a point within a euclidean distance of 'tolerance' px from the centre point. Timeout: recalibrate ET and restart fixation check if not fixated within 'gaze_timeout' ms
	    fstart_time = clock.time()
	    gaze_in_start_time = clock.time()
	    gaze_in_circle = False
	    while True:
	        clock.sleep(5) # 5ms
	
	        gazepos = eyetracker.sample()
	        # check the distance between the sample and the centre
	        # of the screen
	        d = math.sqrt((gazepos[0] - point[0])**2 + (gazepos[1] - point[1])**2)
	        # check if the distance is 'small enough'
	        if d < tolerance:
	            #return # use this if we only want to check at any one time point
	
	            # to make sure gaze is within tolerance for 'duration' amount of time:
	            if gaze_in_circle == False:
	                gaze_in_start_time = clock.time()
	                gaze_in_circle = True
	            elif (clock.time() - gaze_in_start_time) > duration:
	                # ideally, duration must be larger then diff
	                var.fixated = True
	                print('fixated -> True')
	                return
	        else:
	            gaze_in_circle = False
	        # implement a timeout
	        if (clock.time() - fstart_time) > gaze_timeout:
	            eyetracker.stop_recording()
	            send_triggers(3,'Recalibration start')
	            eyetracker.calibrate()
	            eyetracker.start_recording()
	            send_triggers(4,'Recalibration end')
	            fstart_time = clock.time()
	            items.run(u'PressSpacebar') # because opensesame was showing a blank screen instead of the fixation dot sketchpad, after calibration
	            items.run(u'keyboard_response')
	            items.run(u'fixation1_sketchpad') # because opensesame was showing a blank screen instead of the fixation dot sketchpad, after calibration
	            send_triggers(1,'Fixation dot shown again due to recalibration')
	__end__

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=32 html=yes show_if=True text="Welcome to our EEG/Eye-Tracking experiment! <br /><br /><i> Press any key to continue... </i>" x=10 y=-37 z_index=0

