---
API: 3
OpenSesame: 4.0.13
Platform: posix
---
set width 1024
set title free_viewing_experiment
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "/home/stimulus/projects/2024FreeViewingMSCOCO/experiments"
set disable_garbage_collection True
set description "The main experiment item"
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#3d3846"

define sketchpad PressSpacebar
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Press spacebar to start trial<br />" x=0.0 y=0.0 z_index=0

define sequence block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run PressSpacebar True
	run fixation1_sketchpad True
	run wait_for_centre_gaze True disabled
	run fixation_jittered True
	run stimuli True

define form_text_display endofinstructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	set form_text "Thank you for participating."
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define form_text_display endofpractice
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	set form_text "End of Practice"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_pygaze_init True
	run welcome True
	run priliminary_instructions True
	run trial_instruction True
	run new_pygaze_start_recording True
	run practiceloop True
	run endofpractice True
	run new_sketchpad True
	run main_loop True
	run endofinstructions True

define sketchpad fixation1_sketchpad
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=white show_if=True style=default x=0 y=0 z_index=0

define sketchpad fixation_jittered
	set duration 400
	set description "Displays stimuli"
	draw fixdot color=white show_if=True style=default x=0 y=0 z_index=0

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define loop main_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 image "1_o.jpg"
	setcycle 1 image "2_o.jpg"
	setcycle 2 image "3_o.jpg"
	setcycle 3 image "4_o.jpg"
	setcycle 4 image "5_o.jpg"
	setcycle 5 image "6_o.jpg"
	setcycle 6 image "7_o.jpg"
	setcycle 7 image "8_o.jpg"
	setcycle 8 image "9_o.jpg"
	setcycle 9 image "10_o.jpg"
	run block_sequence

define form_text_display new_1_form_text_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	set form_text "Your message"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define sketchpad new_1_sketchpad
	set duration keypress
	set description "Displays stimuli"

define sequence new_2_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define feedback new_feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"

define form_text_display new_form_text_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	set form_text "Your message"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define loop new_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trial_sequence

define pygaze_init new_pygaze_init
	set tracker_type EyeLink
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initializes and calibrates the eye tracker"
	set calibrate yes
	set calbeep yes
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile automatic

define pygaze_start_recording new_pygaze_start_recording
	set status_msg start_trial
	set description "Puts the eye tracker out of recording mode"

define reset_feedback new_reset_feedback
	set description "A very simple plug-in to reset feedback variables"

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="End of Practice trials" x=0 y=0 z_index=0

define form_text_display practiceinstructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	set form_text ""
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define loop practiceloop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 image "1_p.jpg"
	setcycle 1 image "2_p.jpg"
	setcycle 2 image "3_p.jpg"
	run block_sequence

define sketchpad priliminary_instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="<i> Instructions : </i><br /><br />1. Make sure you have followed the calibration steps before the experiment. If you have skipped that step, please press the Esc key and end the experiment.<br /><br />2. This is an eyetracking experiment. You will see 10 images (10 trials) throughout the experiment. You can freely look at the different elements of the image shown.<br /><br />3. Before each trail you are required to fixate (look) at the center of the screen and only then the image trail shows up. <br /><br />4. Trial continues on keypress.<br /><br />5. You might require to recalibrate in between the experiment if the experiment time is longer than anticipated.<br /><br />6. You can terminate the experiment at any point by pressing the Esc.<br /><br />7. The data recorded will only be used for research purposes.<br /><br />8. We will run a practice run first and only then continue with the original experiment.<br />" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="<i>Press any key to continue. </i>" x=0 y=288 z_index=0

define form_text_display priliminaryinstructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	set form_text ""
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define sketchpad stimuli
	set duration 5000
	set description "Displays stimuli"
	draw image center=1 file="[image]" scale=2 show_if=True x=0 y=0 z_index=0

define sketchpad trial_instruction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="The next three trials will be practice trials. It is to familiarize you with the experiment design.<br /><br />You are required to fixate at the center before every trial and only then you can proceed in the experiment.<br /><br />You are free to stop and ask about the experiment in between the practice trials." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="<i> Press any key to continue </i>" x=0 y=256 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define inline_script wait_for_centre_gaze
	set description "Executes Python code"
	___run__
	import math
	
	tolerance = 400
	diff = 800
	def wait_for_gaze(point):
	    fstart_time = clock.time()
	    time_sample = clock.time()
	    while True:
	        # core.pause(0.001) # 1ms
	        if clock.time()-time_sample > diff:
	            gazepos = eyetracker.sample()
	            # check the distance between the sample and the centre
	            # of the screen
	            d = math.sqrt((gazepos[0] - point[0])**2 + (gazepos[1] - point[1])**2)
	            # check if the distance is 'small enough'
	            if d < tolerance:
	                return
	            # implement a timeout
	            if clock.time() - fstart_time > 2000:
	                eyetracker.calibrate()
	                fstart_time = clock.time()
	            time_sample = clock.time()
	        
	def wait_for_gaze_for_duration(point, duration_val):
	    gaze_in_start_time = clock.time()
	    # timeout_timer = clock.time()
	    time_sample = clock.time()
	    gaze_in_circle = False
	    
	    while True:
	        if clock.time() - time_sample > diff:
	            gazepos = eyetracker.sample()
	            # check the distance between the sample and the centre
	            # of the screen
	            d = math.sqrt((gazepos[0] - point[0])**2 + (gazepos[1] - point[1])**2)
	            # check if the distance is 'small enough'
	            if d < tolerance:
	                if gaze_in_circle == False:
	                    gaze_in_start_time = clock.time()
	                    gaze_in_circle = True
	                elif clock.time() - gaze_in_start_time > duration:
	                    # ideally, duration must be larger then diff
	                    return
	            else:
	                gaze_in_circle = False
	            # implement a timeout
	            # if clock.time() - timeout_timer > 20000:
	            #     eyetracker.calibrate()
	            #     timeout_timer = clock.time()
	            time_sample = clock.time()
	
	# compute the screen centre coordinates
	centre = (exp.resolution()[0]/2, exp.resolution()[1]/2)
	
	wait_for_gaze(centre)
	#clock.sleep(100)
	__end__
	set _prepare ""

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=True text="Welcome to the experiment! <br /><br /><i> Press any key to continue... </i>" x=0 y=0 z_index=0

